CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:413
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (directory doesnot containregexp "[\\\\/]\\.") (file does startwith "007011-")

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Row>[0-9]{3})(?P<Column>[0-9]{3})-(?P<Field>[0-9].*)-(?P<Time>[0-9]{3})001(?P<Channel>[0-9]+).*$
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:cycle(?P<Cycle>[0-9]{1})
    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "001") (metadata does Cycle "1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002") (metadata does Cycle "1")
    Name to assign these images:YFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "001") (metadata does Cycle "2")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "002") (metadata does Cycle "2")
    Name to assign these images:EDU
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Well

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:IllumHoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:YFP
    Name the output image:IllumYFP
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:DAPI
    Name the output image:IllumDAPI
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:EDU
    Name the output image:IllumEDU
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:40
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:9|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
    Select the type of image to save:Image
    Select the image to save:IllumHoechst
    Select method for constructing file names:Single name
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    Enter single file name:IllumHoechst
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumYFP
    Select method for constructing file names:Single name
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    Enter single file name:IllumYFP
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumDAPI
    Select method for constructing file names:Single name
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    Enter single file name:IllumDAPI
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumEDU
    Select method for constructing file names:Single name
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    Enter single file name:IllumEDU
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    Saved file format:npy
    Output file location:Default Output Folder sub-folder|IllumCorr
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:Yes
    Create subfolders in the output folder?:No
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